var globalmax, globalmin;

function minmax(dir, filename) {
	if (endsWith(dir, File.separator) == false) {
		dir += File.separator;
	}

	open(dir+filename);
  getMinAndMax(min, max);

  print(filename + "min=" + min);
  print(filename + "max=" + max);

  if (min < globalmin) globalmin = min;
  if (max > globalmax) globalmax = max;
  close();
}

function convertunit(dir, filename) {
	print("Processing "+filename);
	
	if (endsWith(dir, File.separator) == false) {
		dir += File.separator;
	}

	open(dir+filename);	
	getPixelSize(unit, pw, ph, pd);
	
	unitchanged = false;
	if (unit == "cm") {
		print("--> Converting from cm to um");
		pw *= 10*1000;
		ph *= 10*1000;
		unitchanged = true;
	} else if (unit == "inch") {
	  print("--> Converting from inch to um");
	  pw *= 25.4*1000;
    ph *= 25.4*1000;
    unitchanged = true;
  }

  if (unitchanged == true) {
		setVoxelSize(pw, ph, 0, "um");
		save(dir+filename);
	}

	close();
}

macro "SIOS Post Action Tool - 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"{
	dir = getDirectory("Select directory containing SIOS TIFFs");
	files = getFileList(dir);
    tiffiles = filterFilesByExtension(files, '.tif');

	Dialog.create("SIOS Post Options");
	Dialog.addChoice("Add Filename", newArray("Yes", "No"));
	Dialog.addChoice("Add Sequence #", newArray("No", "Yes"));
	Dialog.addChoice("Add Colourbar", newArray("No", "Yes"));
	Dialog.addChoice("Consistent min/max", newArray("Yes", "No"));
	Dialog.show();

	addfilename = 0;
	if (Dialog.getChoice() == "Yes") {
		addfilename = 1;
	}

  addsequence = 0;
  if (Dialog.getChoice() == "Yes") {
    addsequence = 1;
  }

	addcolourbar = 0;
	if (Dialog.getChoice() == "Yes") {
	  addcolourbar = 1;
	}

	consistentminmax = 0;
	if (Dialog.getChoice() == "Yes") {
	  consistentminmax = 1;
	}
	
	// XXX Recently (2016-01-10), if batch mode is enable images are no longer
	// saved in colour. Therefore we disable it for now.
	//setBatchMode(true);
	if (consistentminmax) {
    for (idx = 0; idx < tiffiles.length; ++idx) {
      showProgress(0.5*(idx+1)/tiffiles.length);
      filename = tiffiles[idx];
      minmax(dir, filename);
    }
    print("min=" + globalmin);
    print("max=" + globalmax);
  } else {
    globalmin = 0;
    globalmax = 0;
  }

	for (idx = 0; idx < tiffiles.length; ++idx) {
    showProgress(0.5+0.5*(idx+1)/tiffiles.length);
		filename = tiffiles[idx];
    convertunit(dir, filename);
    lbl = '';
    if (addsequence) lbl = ''+idx;
    savewithlut(dir, filename, "Fire", "PNG", addfilename, addcolourbar, globalmin, globalmax, lbl);
    //savewithlut(dir, filename, "ICA", "PNG", addfilename, addcolourbar, globalmin, globalmax, lbl);
	}

	showMessage("Processing complete.");
}	
